PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = onlymusic
  keyboardBackend = ioHub
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Routines
  Routine Welcome_message
    TextComponent text
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Welcome !
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  Routine Instructions
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 19
      text = $"For this experiment you are asked to press" + " \n bar space when you feel certain time has elapsed" + "\n The target time is gonna be shown in the screen and  " + " \n the time will start to run since the moment you press bar space"
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine routine_1
    CodeComponent fb_code
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine times_start
    TextComponent text_3
      letterHeight = 0.05
      pos = (0,0.3)
      startVal [time (s)] = 0.0
      text = The amount of seconds you have to estimate is 
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Participant1
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        The time will start since the moment you
        press the space bar
  Routine Estimation
  Routine t_2
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Time running
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    TextComponent text_6
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
      text = Time running
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    TextComponent text_7
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 12.0
      stopVal [duration (s)] = 1.0
      text = Time running
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    SoundComponent sound_1
      sound = C:/Users/carelab/Desktop/Erik/stimuli/a2.wav
      startVal [time (s)] = 0.0
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = seconds
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    TextComponent text_13
      letterHeight = 0.05
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = seconds
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Participant1
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0.2, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = seconds
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 18.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Participant1
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 18.0
      stopVal [duration (s)] = 2
      text = seconds
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Flow
  Routine Welcome_message
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/carelab/Desktop/Erik/resources/Lsquare.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Participant1', 30), ('Participant2', 30), ('Participant3', 105), ('Participant4', 105), ('Participant5', 60), ('Participant6', 120), ('Participant7', 120), ('Participant8', 120), ('Participant9', 105), ('Participant10', 60), ('Participant11', 105), ('Participant12', 60), ('Participant13', 30), ('Participant14', 60), ('Participant15', 120), ('Participant16', 30), ('Participant17', 30), ('Participant18', 30), ('Participant19', 105), ('Participant20', 105), ('Participant21', 60), ('Participant22', 120), ('Participant23', 120), ('Participant24', 120), ('Participant25', 105), ('Part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,
      OrderedDict([('Participant1', 30), ('Participant2', 105), ('Participant3', 105), ('Participant4', 60), ('Participant5', 120), ('Participant6', 120), ('Participant7', 120), ('Participant8', 105), ('Participant9', 60), ('Participant10', 105), ('Participant11', 60), ('Participant12', 30), ('Participant13', 60), ('Participant14', 120), ('Participant15', 30), ('Participant16', 30), ('Participant17', 30), ('Participant18', 105), ('Participant19', 105), ('Participant20', 60), ('Participant21', 120), ('Participant22', 120), ('Participant23', 120), ('Participant24', 105), ('Participant25', 60), ('Parti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,
      OrderedDict([('Participant1', 30), ('Participant2', 30), ('Participant3', 30), ('Participant4', 105), ('Participant5', 105), ('Participant6', 60), ('Participant7', 120), ('Participant8', 120), ('Participant9', 120), ('Participant10', 105), ('Participant11', 60), ('Participant12', 105), ('Participant13', 60), ('Participant14', 30), ('Participant15', 60), ('Participant16', 120), ('Participant17', 30), ('Participant18', 30), ('Participant19', 30), ('Participant20', 105), ('Participant21', 105), ('Participant22', 60), ('Participant23', 120), ('Participant24', 120), ('Participant25', 120), ('Partic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,
      OrderedDict([('Participant1', 105), ('Participant2', 105), ('Participant3', 60), ('Participant4', 120), ('Participant5', 120), ('Participant6', 120), ('Participant7', 105), ('Participant8', 60), ('Participant9', 105), ('Participant10', 60), ('Participant11', 30), ('Participant12', 60), ('Participant13', 120), ('Participant14', 30), ('Participant15', 30), ('Participant16', 30), ('Participant17', 105), ('Participant18', 105), ('Participant19', 60), ('Participant20', 120), ('Participant21', 120), ('Participant22', 120), ('Participant23', 105), ('Participant24', 60), ('Participant25', 105), ('Part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
    Routine times_start
    Routine t_2
  LoopTerminator trials
