PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Demo_timePStroop
  keyboardBackend = ioHub
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Routines
  Routine Welcome_message
    TextComponent text
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Welcome !
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  Routine Instructions
    TextComponent text_instr
      font = Comic Sans
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 19
      text = $"For this experiment you are asked to press" + " \n bar space when you feel certain time has elapsed" + "\n The target time is gonna be shown in the screen and  " + " \n the time will start to run since the moment you press bar space as well" + "\n i addition to this, you`ll have to do a stroop task"
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine routine_1
    CodeComponent fb_code
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine times_start
    TextComponent text_3
      letterHeight = 0.05
      pos = (0,0.3)
      startVal [time (s)] = 0.0
      text = You`ll have to press space bar when you feel the next amount of seconds have elapsed :
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Participant1
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        The time will start since the moment you
        press the space bar as well. In addition you are gonna start listenning music
  Routine Estimation
  Routine t_2
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'r' , 'b' , 'y' , 'g'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_5
      letterHeight = 0.1
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      text [set every frame] = $Participant1
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    TextComponent stopb
      letterHeight = 0.1
      pos = (0, -0.40)
      startVal [time (s)] = 0.0
      text [set every frame] = $Participant1
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    TextComponent stopl
      letterHeight = 0.1
      ori = 90
      pos = (-0.75, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $Participant1
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    TextComponent stopr
      letterHeight = 0.1
      ori = -90
      pos = (0.75, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $Participant1
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Routine:
        re=sorted([random.randint(0,120) for i in range(20)])
      Each Frame:
        if (t>=re[0]) & (t<re[1]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[1]) & (t<re[2]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[2]) & (t<re[3]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[3]) & (t<re[4]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[4]) & (t<re[5]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[5]) & (t<re[6]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[6]) & (t<re[7]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[7]) & (t<re[8]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[8]) & (t<re[9]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[10]) & (t<re[11]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[11]) & (t<re[12]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[12]) & (t<re[13]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[13]) & (t<re[14]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[14]) & (t<re[15]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[15]) & (t<re[16]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[16]) & (t<re[17]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[17]) & (t<re[18]):
            text_5.contrast =1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
        if (t>=re[18]) & (t<re[19]):
            text_5.contrast =0
            stopb.contrast =0
            stopl.contrast =0
            stopr.contrast =0
        if (t>=re[19]):
            text_5.contrast = 1
            stopb.contrast =1
            stopl.contrast =1
            stopr.contrast =1
    TextComponent text_6
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import os
        my_path="C:/Users/carelab/Desktop/Erik/stimuli"
        arr=os.listdir(my_path)

        sound_1 = sound.Sound(f"C:/Users/carelab/Desktop/Erik/stimuli/{arr[1]}", secs=-1, stereo=True, hamming=True,
            name='sound_1')
        sound_1.setVolume(1.0)
      Begin Routine:
        if sound_1.status == NOT_STARTED:

            sound_1.play(when=win)
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if key_resp_2.keys is not None and len(key_resp_2.keys)>0 :
                distractor.finished=1
  Routine end_sound
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        sound_1.stop()
        random_song = random.choice(arr)
        sound_1 = sound.Sound(f'C:/Users/carelab/Desktop/Erik/stimuli/{random_song}', secs=-1, stereo=True, hamming=True,
            name='sound_1')
        sound_1.setVolume(1.0)
Flow
  Routine Welcome_message
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/carelab/Desktop/Erik/resources/Lsquare.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Participant1', 30), ('Participant2', 30), ('Participant3', 105), ('Participant4', 105), ('Participant5', 60), ('Participant6', 120), ('Participant7', 120), ('Participant8', 120), ('Participant9', 105), ('Participant10', 60), ('Participant11', 105), ('Participant12', 60), ('Participant13', 30), ('Participant14', 60), ('Participant15', 120), ('Participant16', 30), ('Participant17', 30), ('Participant18', 30), ('Participant19', 105), ('Participant20', 105), ('Participant21', 60), ('Participant22', 120), ('Participant23', 120), ('Participant24', 120), ('Participant25', 105), ('Part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,
      OrderedDict([('Participant1', 30), ('Participant2', 105), ('Participant3', 105), ('Participant4', 60), ('Participant5', 120), ('Participant6', 120), ('Participant7', 120), ('Participant8', 105), ('Participant9', 60), ('Participant10', 105), ('Participant11', 60), ('Participant12', 30), ('Participant13', 60), ('Participant14', 120), ('Participant15', 30), ('Participant16', 30), ('Participant17', 30), ('Participant18', 105), ('Participant19', 105), ('Participant20', 60), ('Participant21', 120), ('Participant22', 120), ('Participant23', 120), ('Participant24', 105), ('Participant25', 60), ('Parti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,
      OrderedDict([('Participant1', 30), ('Participant2', 30), ('Participant3', 30), ('Participant4', 105), ('Participant5', 105), ('Participant6', 60), ('Participant7', 120), ('Participant8', 120), ('Participant9', 120), ('Participant10', 105), ('Participant11', 60), ('Participant12', 105), ('Participant13', 60), ('Participant14', 30), ('Participant15', 60), ('Participant16', 120), ('Participant17', 30), ('Participant18', 30), ('Participant19', 30), ('Participant20', 105), ('Participant21', 105), ('Participant22', 60), ('Participant23', 120), ('Participant24', 120), ('Participant25', 120), ('Partic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,
      OrderedDict([('Participant1', 105), ('Participant2', 105), ('Participant3', 60), ('Participant4', 120), ('Participant5', 120), ('Participant6', 120), ('Participant7', 105), ('Participant8', 60), ('Participant9', 105), ('Participant10', 60), ('Participant11', 30), ('Participant12', 60), ('Participant13', 120), ('Participant14', 30), ('Participant15', 30), ('Participant16', 30), ('Participant17', 105), ('Participant18', 105), ('Participant19', 60), ('Participant20', 120), ('Participant21', 120), ('Participant22', 120), ('Participant23', 105), ('Participant24', 60), ('Participant25', 105), ('Part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
    Routine times_start
    LoopInitiator distractor loopType="TrialHandler"
      conditionsFile = C:/Users/carelab/Desktop/Erik/resources/stroop.xlsx
      isTrials = False
      loopType = random
      nReps = 20
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      conditions:
        [{'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'RED', 'color': 'blue', 'correct': 'b'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'blue', 'correct': 'b'},
        {'word': 'RED', 'color': 'red', 'correct': 'r'},
        {'word': 'BLUE', 'color': 'red', 'correct': 'r'},
        {'word': 'RED', 'color': 'blue', 'correct': 'b'}]
      Routine t_2
    LoopTerminator distractor
    Routine end_sound
  LoopTerminator trials
  Routine Welcome_message
